<?xml version="1.0" encoding="utf-16"?>
<velocity11 file="Form_Data" version="1.0">
  <Property name="UseGlobalContext" value="1" />
  <Property name="RestoreDefaultsOnLoad" value="1" />
  <Property name="ShowLogInFullScreen" value="1" />
  <Property name="FormBackgroundColor" value="-6429792" />
  <Object type="ToolboxLibrary.MainContainer, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="mainContainer1" children="Controls">
    <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage4" children="Controls">
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage3" children="Controls">
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage2" children="Controls">
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    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup8" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic7" children="Controls">
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="form_status" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton4" children="Controls">
        <Property name="BackColor">240, 240, 240</Property>
        <Property name="Text">Reagent Volumes</Property>
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        <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="popup_file = &quot;ReagentVolumes_SpatialTranscriptomics_v.B1.0.2.xlsx&quot;&#xA;&#xA;open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/run_form_popup.js')&#xA;" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Reagent Volumes" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic74" children="Controls">
        <Property name="BorderStyle">Fixed3D</Property>
        <Property name="Text">Status</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Status" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="Status" ValueToDisplay="" Hide_if="" />
      </Object>
      <Property name="TabStop">False</Property>
      <Property name="Text">Information</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Information" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Information" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup7" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic4" children="Controls">
        <Property name="Text">(For Part1 and Part 2 only. Part 0 always processes 4 slides)</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="(For Part1 and Part 2 only. Part 0 always processes 4 slides)" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="(For Part1 and Part 2 only. Part 0 always processes 4 slides)" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton3" children="Controls">
        <Property name="BackColor">240, 240, 240</Property>
        <Property name="Text">Clear Workstation Setup Display</Property>
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        <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="open(&quot;C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Forms\\Supporting Files\\set_display_SpatialTranscriptomics_v.B1.0.2.js&quot;)&#xA;formCurrentProtocol = &quot;&quot;&#xA;formProtocolCase = &quot;&quot;&#xA;set_initial_state(&quot;Empty&quot;, columns_samples)" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Clear Workstation Setup Display" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton2" children="Controls">
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        <Property name="Text">Display Initial Workstation Setup</Property>
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        <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="open(&quot;C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Forms\\Supporting Files\\set_display_SpatialTranscriptomics_v.B1.0.2.js&quot;)&#xA;formCurrentProtocol = &quot;&quot;&#xA;formProtocolToRun = formProtocolName&#xA;set_initial_state(formProtocolToRun, columns_samples)&#xA;print(&quot;Displaying workstation initial state&quot;)&#xA;&#xA;" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Display Initial Workstation Setup" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic71" children="Controls">
        <Property name="Text">4) Load labware according to Workstation Setup --&gt;</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="4) Load labware according to Workstation Setup --&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="4) Load labware according to Workstation Setup --&gt;" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic70" children="Controls">
        <Property name="Text">3) Click button below to Display Initial Workstation Setup</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="3) Click button below to Display Initial Workstation Setup" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="3) Click button below to Display Initial Workstation Setup" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic2" children="Controls">
        <Property name="Text">1) Select Protocol to Run</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="1) Select Protocol to Run" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="1) Select Protocol to Run" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist1" children="Controls">
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formProtocolName" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="Part0_ProPlate_withTissueRemoval1_SpatialTranscriptomics_v.B1.0.2.rst;Part0_ProPlate_withoutTissueRemoval1_SpatialTranscriptomics_v.B1.0.2.rst;Part1_SpatialTranscriptomics_v.B1.0.2.rst;Part2_SpatialTranscriptomics_v.B1.0.2.rst" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="Part1_SpatialTranscriptomics_v.B1.0.2.rst" ValueToDisplay="" Hide_if="" />
        <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="Part0_ProPlate_withTissueRemoval1_SpatialTranscriptomics_v.B1.0.2.rst;Part0_ProPlate_withoutTissueRemoval1_SpatialTranscriptomics_v.B1.0.2.rst;Part1_SpatialTranscriptomics_v.B1.0.2.rst;Part2_SpatialTranscriptomics_v.B1.0.2.rst;" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic3" children="Controls">
        <Property name="Text">2) Select Number of Columns of Samples</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="2) Select Number of Columns of Samples" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="2) Select Number of Columns of Samples" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleDroplist, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleDroplist2" children="Controls">
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="columns_samples" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Items" Description=" Values for list. Use &quot;;&quot; to seperate" Type="1" Value="1;2;3;4;6;12" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="1" Value="12" ValueToDisplay="" Hide_if="Const(0)" />
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        <Parameter Name="Value" Description="" Type="1" Value="4" ValueToDisplay="" Hide_if="" />
        <Parameter Name="Item selections variable" Description=" JavaScript variable that will hold the selections that appear in the droplist." Type="1" Value="1;2;3;4;6;12;" ValueToDisplay="" Hide_if="" />
      </Object>
      <Property name="TabStop">False</Property>
      <Property name="Text">Parameters</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Parameters" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Parameters" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup3" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox2" children="Controls">
        <Property name="Text">Reduce off-magnet incubations to 10 sec</Property>
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="skip_long_inc" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="0" ValueToDisplay="" Hide_if="" />
        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Reduce off-magnet incubations to 10 sec" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleCheckbox, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleCheckbox1" children="Controls">
        <Property name="Text">Reduce ALL incubations to 10 sec, mix cycles to 1, and no temperature</Property>
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        <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="protocol_testing" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Default value" Description="The contents of this field when the form is initially displayed" Type="8" Value="0" ValueToDisplay="" Hide_if="" />
        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Reduce ALL incubations to 10 sec, mix cycles to 1, and no temperature" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Property name="TabStop">False</Property>
      <Property name="Text">TESTING ONLY</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="TESTING ONLY" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="TESTING ONLY" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup2" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup6" children="Controls">
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic25" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic17" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">MiniHub Cassette 1</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 1" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 1" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic18" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">MiniHub Cassette 2</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 2" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 2" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic19" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">MiniHub Cassette 3</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 3" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 3" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic20" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">MiniHub Cassette 4</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="MiniHub Cassette 4" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="MiniHub Cassette 4" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic21" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">Shelf 5</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 5" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 5" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic22" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot5" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Eppendorf with 100 uL beads" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic23" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot5" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Eppendorf with 81 uL beads" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic24" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic26" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic27" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic28" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot4" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="New PCR plate for final sample collection" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic29" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot4" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic30" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">Shelf 4</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 4" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 4" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic31" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">Shelf 3</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 3" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 3" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic32" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic33" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot3" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="New PCR plate" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic34" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic35" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic1" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot2" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Water Reservoir" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic36" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">Shelf 2</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 2" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 2" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic38" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic39" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic40" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot2" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic41" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">Shelf 1</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Shelf 1" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="Shelf 1" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic42" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass1Slot1" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Ethanol Reservoir" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic43" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass2Slot1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic44" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass3Slot1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic45" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formCass4Slot1" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Property name="TabStop">False</Property>
        <Property name="Text">MiniHub</Property>
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        <Parameter Name="Group name" Description="The name of this group" Type="1" Value="MiniHub" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="MiniHub" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup5" children="Controls">
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic67" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravo6Temp" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic16" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravo4Temp" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic62" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos9" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic61" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos8" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Empty Tip Box" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic60" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos7" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic56" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Pos 9&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 9&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 9&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic55" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Position 8&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 8&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 8&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic52" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;7: AlpaqRound&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;7: AlpaqRound&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;7: AlpaqRound&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic59" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos6" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Pre-set to 4C, prompted for Reagent Plate" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic58" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos5" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic57" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos4" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Pre-set to 15C, prompted for 70 uL cDNA:RNA in PCR Plate" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic54" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Pos 6: Peltier&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 6: Peltier&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 6: Peltier&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic53" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Pos 5: Shaker&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 5: Shaker&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 5: Shaker&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic51" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Pos 4: Peltier&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Pos 4: Peltier&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Pos 4: Peltier&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic11" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos2" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="New Tip Box" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic14" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos3" ValueToDisplay="" Hide_if="" />
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        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic49" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Position 2&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 2&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 2&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic10" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formBravoPos1" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Deepwell Waste Plate" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic50" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Position 3&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 3&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 3&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic48" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">&lt;Position 1&gt;</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="&lt;Position 1&gt;" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="&lt;Position 1&gt;" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleImage, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleImage1" children="Controls">
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        </Object>
        <Property name="TabStop">False</Property>
        <Property name="Text">Bravo Deck</Property>
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        <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Bravo Deck" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="Bravo Deck" ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup4" children="Controls">
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic66" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formStacker1" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="6 Tip Boxes" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic65" children="Controls">
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          <Parameter Name="JavaScript variable" Description="The variable whose value is displayed in this field" Type="1" Value="formStacker2" ValueToDisplay="" Hide_if="" />
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          <Parameter Name="Value" Description="" Type="1" Value="Empty" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic6" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">BenchCel Stacker 2</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="BenchCel Stacker 2" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="BenchCel Stacker 2" ValueToDisplay="" Hide_if="" />
        </Object>
        <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic46" children="Controls">
          <Property name="BorderStyle">Fixed3D</Property>
          <Property name="Text">BenchCel Stacker 1</Property>
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          <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="BenchCel Stacker 1" ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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          <Parameter Name="Value" Description="" Type="1" Value="BenchCel Stacker 1" ValueToDisplay="" Hide_if="" />
        </Object>
        <Property name="TabStop">False</Property>
        <Property name="Text">BenchCel</Property>
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        <Parameter Name="Group name" Description="The name of this group" Type="1" Value="BenchCel" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Value" Description="" Type="1" Value="BenchCel" ValueToDisplay="" Hide_if="" />
      </Object>
      <Property name="TabStop">False</Property>
      <Property name="Text">Workstation Setup</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Workstation Setup" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Workstation Setup" ValueToDisplay="" Hide_if="" />
    </Object>
    <Object type="ToolboxLibrary.OperatorConsoleGroup, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleGroup1" children="Controls">
      <Object type="ToolboxLibrary.OperatorConsoleStatic, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleStatic72" children="Controls">
        <Property name="Text">Once you have loaded labware according to Workstation Setup on right, click "Run Selected Protocol" to start run.</Property>
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        <Parameter Name="Display string" Description="The string to display in the static text control" Type="1" Value="Once you have loaded labware according to Workstation Setup on right, click &quot;Run Selected Protocol&quot; to start run." ValueToDisplay="" Hide_if="Variable(JavaScript variable) != Const(&quot;&quot;)" />
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        <Parameter Name="Value" Description="" Type="1" Value="Once you have loaded labware according to Workstation Setup on right, click &quot;Run Selected Protocol&quot; to start run." ValueToDisplay="" Hide_if="" />
      </Object>
      <Object type="ToolboxLibrary.OperatorConsoleButton, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="operatorConsoleButton1" children="Controls">
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        <Property name="Text">Run Selected Protocol</Property>
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        <Parameter Name="Script" Description="The JavaScript to execute when this button is pressed" Type="31" Value="runset.clear();&#xA;print(&quot;Clearing Runset&quot;)&#xA;&#xA;&#xA;if (/:/.test(formProtocolName)){&#xA;    formParameters = formProtocolName.split(&quot;:&quot;,2)&#xA;    formProtocolCase = formParameters[1]&#xA;    formProtocolToRun = formParameters[0]&#xA;} else {&#xA;    formProtocolToRun = formProtocolName&#xA;    formProtocolCase = &quot;Not Applicable&quot;&#xA;}&#xA;&#xA;if (/\b.pro/.test(formProtocolToRun)){&#xA;    print(&quot;Starting protocol : &quot;+formProtocolToRun)&#xA;    runset.appendProtocolFileToRunset (&quot;C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Protocol Files\\&quot; + formProtocolToRun, 1, '', 'SpatialTranscriptomics_v.B1.0.2.VWForm');&#xA;} else if  (/\b.rst/.test(formProtocolToRun)){&#xA;    print(&quot;Starting runset : &quot;+formProtocolToRun)&#xA;    runset.appendRunsetFileToRunset (&quot;C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Protocol Files\\&quot; + formProtocolToRun, 'SpatialTranscriptomics_v.B1.0.2.VWForm');&#xA;}&#xA;&#xA;run(&quot;C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Scripts\\clear_inventory.bat&quot;, true);&#xA;print(&quot;Clearing Plate Inventory&quot;)&#xA;&#xA;" ValueToDisplay="" Hide_if="" />
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Run Selected Protocol" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.PauseResume, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="pauseResume1" children="Controls">
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        <Property name="Text">Pause</Property>
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Pause" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Object type="ToolboxLibrary.ToggleFullScreen, Toolbox, Version=13.1.0.1366, Culture=neutral, PublicKeyToken=null" name="toggleFullScreen1" children="Controls">
        <Property name="BackColor">240, 240, 240</Property>
        <Property name="Text">Full Screen</Property>
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        <Parameter Name="Caption" Description="The string to display in the button" Type="1" Value="Full Screen" ValueToDisplay="" Hide_if="" />
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      </Object>
      <Property name="TabStop">False</Property>
      <Property name="Text">Controls</Property>
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      <Parameter Name="Group name" Description="The name of this group" Type="1" Value="Controls" ValueToDisplay="" Hide_if="" />
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      <Parameter Name="Value" Description="" Type="1" Value="Controls" ValueToDisplay="" Hide_if="" />
    </Object>
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  </Object>
</velocity11>