<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='0' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Device Files\BravoMiniPHBenchCel2R_round_magnet_ProPlateBaseOnPos6.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Forms\SpatialTranscriptomics_v.B1.0.2.VWForm' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='1' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(protocol_testing == 0 || skip_lonc_inc == 0){
   task.skip()
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='' />
						<Parameter Category='' Name='Body' Value='The testing only box is checked. If this is not intended, abort protocol and restart with box unchecked' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='' />
						<Parameter Category='' Name='Body' Value='Ensure all tip  boxes in stacker 1 have tips on left hand side, missing column should be on right hand side' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
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						<Parameter Category='' Name='4' Value='96 Eppendorf Twin.tec PCR' />
						<Parameter Category='' Name='5' Value='' />
						<Parameter Category='' Name='6' Value='ProPlate Slide Holder' />
						<Parameter Category='' Name='7' Value='96 Costar 3961 PP 2ml assay block' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(protocol_testing || skip_long_inc){task.skip()}' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
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						<Parameter Category='' Name='Timeout' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='//target 37C

if(protocol_testing || skip_long_inc){task.skip()}' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='33' />
						<Parameter Category='' Name='Wait' Value='' />
						<Parameter Category='' Name='Temperature Tolerance' Value='0' />
						<Parameter Category='' Name='Timeout' Value='30' />
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						<Parameter Category='Task Description' Name='Task description' Value='Set temperature - Position (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(protocol_testing || skip_long_inc){task.skip()}' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='20' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(protocol_testing || skip_long_inc){task.skip()}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='' />
						<Parameter Category='' Name='Body' Value='Position 4 has cooled to 4C. Place cDNA synth/probe release plate at position 4.' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='Tips On' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Pre-permeabilization addition and removal' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Pre-permeabilization addition and removal' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 4' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='WB3' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='pre-perm/perm reagent' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Unload' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Unload based on barcode' Value='0' />
						<Parameter Category='' Name='Barcode' Value='' />
						<Parameter Category='' Name='Barcode Side' Value='West' />
						<Parameter Category='' Name='unloadFrom' Value='' />
					</Parameters>
					<Parameter >
						<RemoveFromGroups Name='RemoveFromGroups' Value='0' />
						<AssignedLocations_Node >
							<LocationInfo Value='Agilent Labware MiniHub - 1, cassette 1, slot 1' />
						</AssignedLocations_Node>
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='WB3 Wash' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='WB3 Wash' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Load' >
					<Devices >
						<Device Device_Name='Agilent Labware MiniHub - 1' Location_Name='' />
					</Devices>
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					<Parameters >
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					</Parameters>
					<Parameter >
						<useOriginalLocations Name='useOriginalLocations' Value='1' />
					</Parameter>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Wait For WB3 Load' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='WB3' />
					<Parameter Name='Plate type' Value='96 Matrix open reservoir movable' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Pre-permeabilization addition and removal' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Pre-permeabilization addition and removal' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='WB3 Wash' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='WB3 Wash' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Wait For WB3 Load' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='9' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='//top two rows remaining, spare tip box' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='9' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips On' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Pre-permeabilization addition and removal' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Pre-permeabilization addition and removal' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='WB3 Wash' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='WB3 Wash' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips Off' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box 19477.002' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Pre-permeabilization addition and removal' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;3&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='3' SubsetConfig='1' SubsetType='2' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips On' />
						<Parameter Category='' Name='Location, location' Value='2' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;3&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;5&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='pre-perm/perm reagent' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='120' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.25' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='pipet on northwest corner' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<TaskScript Name='TaskScript' Value='if(protocol_testing || skip_long_inc){task.Reservationtime = 10}' />
					<Parameters >
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						<Parameter Category='' Name='Location to use, plate' Value='6' />
						<Parameter Category='' Name='Location to use, location' Value='6' />
						<Parameter Category='' Name='Reservation time' Value='1800' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='4' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='loop' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(loop == 1){
   task.Volume = 120
   task.Distancefromwellbottom = 0
   task.Dynamictipextension = 0.01
   task.Pipettetechnique = &quot;pipet on northwest corner&quot;
}
else if(loop == 2){
   task.Pipettetechnique = &quot;pipet on northeast corner&quot;
}
else if(loop == 3){
   task.Pipettetechnique = &quot;pipet on southeast corner&quot;
}
else if(loop == 4){
   task.Pipettetechnique = &quot;pipet on southwest corner&quot;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='Ethanol to waste long wait' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='pipet on northwest corner' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='7' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Ethanol to waste' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='20' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='10' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips Off' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;5&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='WB3 Wash' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;3&apos; SubsetConfig=&apos;1&apos; SubsetType=&apos;2&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='3' SubsetConfig='1' SubsetType='2' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips On' />
						<Parameter Category='' Name='Location, location' Value='2' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='WB3' />
						<Parameter Category='' Name='Location, location' Value='5' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='pipet on northwest corner' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Reserve Location' >
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					<Parameters >
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						<Parameter Category='' Name='Location to use, plate' Value='6' />
						<Parameter Category='' Name='Location to use, location' Value='6' />
						<Parameter Category='' Name='Reservation time' Value='10' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='4' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='loop' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='if(loop == 1){
   task.Volume = 100
   task.Distancefromwellbottom = 0
   task.Dynamictipextension = 0.01
   task.Pipettetechnique = &quot;pipet on northwest corner&quot;
}
else if(loop == 2){
   task.Pipettetechnique = &quot;pipet on northeast corner&quot;
}
else if(loop == 3){
   task.Pipettetechnique = &quot;pipet on southeast corner&quot;
}
else if(loop == 4){
   task.Pipettetechnique = &quot;pipet on southwest corner&quot;
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='Ethanol to waste long wait' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='pipet on northwest corner' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='7' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Ethanol to waste' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='20' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='10' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips Off' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>