Velocity11 Protocol_Data 2.0
File_Info
  Device_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Device Files\BravoMiniPHBenchCel2R_round_magnet_ProPlateBaseOnPos6.dev
  Form_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Forms\SpatialTranscriptomics_v.B1.0.2.VWForm
  StartScript: open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/tiptrackingrows.js');
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      Device to use: Bravo - 1
      4: 96 Eppendorf Twin.tec PCR
      6: ProPlate Slide Holder
      7: 96 Costar 3961 PP 2ml assay block
Main_Processes
  Process
    Plate name: TR2
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: TR2 Addition and Remova
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 4
  Process
    Plate name: Tips On
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: TR2 Addition and Remova
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    Task BuiltIn::Spawn Process
      Process to spawn: Spare Tips
    Task Bravo::SubProcess
      Sub-process name: Transfer tips
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    Task BuiltIn::Wait For
      Waitfor: Wait For Used Tip Upstack
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task BuiltIn::Spawn Process
      Process to spawn: Tips On 2
    Task BuiltIn::Spawn Process
      Process to spawn: Tips Off 2
    Task BuiltIn::Spawn Process
      Process to spawn: WB1
  Process
    Plate name: Tips Off
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task BuiltIn::Spawn Process
      Process to spawn: Tips On
    Task Bravo::SubProcess
      Sub-process name: TR2 Addition and Remova
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
    Task BuiltIn::Signal
      Waitfor: Wait For Used Tip Upstack
  Process
    Plate name: Spare Tips
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Transfer tips
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Wait For
      Waitfor: Wait For
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Transfer Tips 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
    Task BuiltIn::Signal
      Waitfor: Wait For_1
  Process
    Plate name: Tips On 2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: WB1
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    Task Bravo::SubProcess
      Sub-process name: WB2
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    Task Bravo::SubProcess
      Sub-process name: Transfer Tips 2
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    Task BuiltIn::Wait For
      Waitfor: Wait For Used Tip Upstack_1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task BuiltIn::Spawn Process
      Process to spawn: Tips On 3
    Task BuiltIn::Spawn Process
      Process to spawn: Tips Off 3
  Process
    Plate name: Tips Off 2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: WB1
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    Task Bravo::SubProcess
      Sub-process name: WB2
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
    Task BuiltIn::Signal
      Waitfor: Wait For Used Tip Upstack_1
  Process
    Plate name: WB1
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 3
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: WB1
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Spawn Process
      Process to spawn: WB2
  Process
    Plate name: WB2
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: WB2
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
      Waitfor: Wait For
    Task BuiltIn::Spawn Process
      Process to spawn: WB3
  Process
    Plate name: WB3
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Wait For
      Waitfor: Wait For_1
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: WB3
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: Tips On 3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: WB3
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  Process
    Plate name: Tips Off 3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: WB3
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  Pipette_Process Name=TR2 Addition and Remova
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 11
      Head mode: Channels=0 ColumnCount=12 RowCount=3 SubsetConfig=1 SubsetType=2 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: Tips On
      Location, location: 2
      Well selection: Column=0 Row=2
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: TR2
      Volume: 180
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=5
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Set temperature - Position
      Estimated time: 3
      TaskScript:
        //targeting 50C

        if(protocol_testing || skip_long_inc){task.skip()}
      Location: 6
      Temperature: 55
      Wait: 0
      Temperature Tolerance: 1
      Timeout: 10
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    Task BuiltIn::Reserve Location
      TaskScript: if(protocol_testing  || skip_long_inc){task.Reservationtime = 10}
      Location to use, plate: 6
      Location to use, location: 6
      Reservation time: 1800
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 268
      TaskScript:
        //targeting 50C

        if(protocol_testing || skip_long_inc){task.skip()}
      Location: 6
      Temperature: 30
      Wait: 1
      Temperature Tolerance: 1
      Timeout: 10
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    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=loop
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        if(loop == 1){
           task.Volume = 180
           task.Distancefromwellbottom = 0
           task.Dynamictipextension = 0.01
           task.Pipettetechnique = "pipet on northwest corner"
        }
        else if(loop == 2){
           task.Pipettetechnique = "pipet on northeast corner"
        }
        else if(loop == 3){
           task.Pipettetechnique = "pipet on southeast corner"
        }
        else if(loop == 4){
           task.Pipettetechnique = "pipet on southwest corner"
        }
      Location, plate: 6
      Volume: 10
      Post-aspirate volume: 2
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(loop != 1){
        task.skip()
        }
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: Tips Off
      Mark tips as used: 1
      Well selection: Column=0 Row=2
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    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer Tips 2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=2 SubsetConfig=2 SubsetType=2 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: Tips On 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: Spare Tips
      Mark tips as used: 0
      Well selection: Column=0 Row=2
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    Task BuiltIn::Group End
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  Pipette_Process Name=Transfer tips
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=2 SubsetConfig=2 SubsetType=2 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 10
      Location, plate: Tips On
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: Spare Tips
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=WB1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 16
      Head mode: Channels=0 ColumnCount=12 RowCount=3 SubsetConfig=1 SubsetType=2 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: Tips On 2
      Location, location: 2
      Well selection: Column=0 Row=5
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 25
      Location, plate: WB1
      Volume: 150
      Liquid class: bead mix
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: WB1
      Volume: 180
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop
      Number of times to loop: 5
      Change tips every N times, N = : 1
    Task BuiltIn::Reserve Location
      TaskScript: if(protocol_testing  || skip_long_inc){task.Reservationtime = 10}
      Location to use, plate: 6
      Location to use, location: 6
      Reservation time: 120
    Task Bravo::secondary::Aspirate
      Estimated time: 23
      Location, plate: 6
      Volume: 90
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=loop
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        if(loop == 1){
           task.Volume = 180
           task.Distancefromwellbottom = 0
           task.Dynamictipextension = 0.01
           task.Pipettetechnique = "pipet on northwest corner"
        }
        else if(loop == 2){
           task.Pipettetechnique = "pipet on northeast corner"
        }
        else if(loop == 3){
           task.Pipettetechnique = "pipet on southeast corner"
        }
        else if(loop == 4){
           task.Pipettetechnique = "pipet on southwest corner"
        }
      Location, plate: 6
      Volume: 10
      Post-aspirate volume: 2
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(loop != 1){
        task.skip()
        }
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 27
      Location, plate: WB1
      Volume: 150
      Liquid class: bead mix
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=5
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    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: WB1
      Volume: 180
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=5
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop
      Number of times to loop: 5
      Change tips every N times, N = : 1
    Task BuiltIn::Reserve Location
      TaskScript: if(protocol_testing  || skip_long_inc){task.Reservationtime = 10}
      Location to use, plate: 6
      Location to use, location: 6
      Reservation time: 120
    Task Bravo::secondary::Aspirate
      Estimated time: 23
      Location, plate: 6
      Volume: 90
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: 6
      Empty tips: 1
      Volume: 120
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=loop
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        if(loop == 1){
           task.Volume = 180
           task.Distancefromwellbottom = 0
           task.Dynamictipextension = 0.01
           task.Pipettetechnique = "pipet on northwest corner"
        }
        else if(loop == 2){
           task.Pipettetechnique = "pipet on northeast corner"
        }
        else if(loop == 3){
           task.Pipettetechnique = "pipet on southeast corner"
        }
        else if(loop == 4){
           task.Pipettetechnique = "pipet on southwest corner"
        }
      Location, plate: 6
      Volume: 10
      Post-aspirate volume: 2
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(loop != 1){
        task.skip()
        }
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: Tips Off 2
      Mark tips as used: 1
      Well selection: Column=0 Row=5
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    Task BuiltIn::Group End
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  Pipette_Process Name=WB2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Head mode: Channels=0 ColumnCount=12 RowCount=3 SubsetConfig=1 SubsetType=2 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: Tips On 2
      Location, location: 2
      Well selection: Column=0 Row=2
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    Task Bravo::secondary::Aspirate
      Estimated time: 14
      Location, plate: WB2
      Volume: 180
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop
      Number of times to loop: 3
      Change tips every N times, N = : 1
    Task BuiltIn::Reserve Location
      TaskScript: if(protocol_testing  || skip_long_inc){task.Reservationtime = 10}
      Location to use, plate: 6
      Location to use, location: 6
      Reservation time: 20
    Task Bravo::secondary::Aspirate
      Estimated time: 23
      Location, plate: 6
      Volume: 90
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=loop
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        if(loop == 1){
           task.Volume = 180
           task.Distancefromwellbottom = 0
           task.Dynamictipextension = 0.01
           task.Pipettetechnique = "pipet on northwest corner"
        }
        else if(loop == 2){
           task.Pipettetechnique = "pipet on northeast corner"
        }
        else if(loop == 3){
           task.Pipettetechnique = "pipet on southeast corner"
        }
        else if(loop == 4){
           task.Pipettetechnique = "pipet on southwest corner"
        }
      Location, plate: 6
      Volume: 10
      Post-aspirate volume: 2
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(loop != 1){
        task.skip()
        }
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Location, plate: WB2
      Volume: 180
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=5
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    Task Bravo::secondary::Dispense
      Estimated time: 9345
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop
      Number of times to loop: 3
      Change tips every N times, N = : 1
    Task BuiltIn::Reserve Location
      TaskScript: if(protocol_testing  || skip_long_inc){task.Reservationtime = 10}
      Location to use, plate: 6
      Location to use, location: 6
      Reservation time: 20
    Task Bravo::secondary::Aspirate
      Estimated time: 32
      Location, plate: 6
      Volume: 90
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 6
      Empty tips: 1
      Volume: 120
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Loop End
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=loop
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        if(loop == 1){
           task.Volume = 180
           task.Distancefromwellbottom = 0
           task.Dynamictipextension = 0.01
           task.Pipettetechnique = "pipet on northwest corner"
        }
        else if(loop == 2){
           task.Pipettetechnique = "pipet on northeast corner"
        }
        else if(loop == 3){
           task.Pipettetechnique = "pipet on southeast corner"
        }
        else if(loop == 4){
           task.Pipettetechnique = "pipet on southwest corner"
        }
      Location, plate: 6
      Volume: 10
      Post-aspirate volume: 2
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(loop != 1){
        task.skip()
        }
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: Tips Off 2
      Mark tips as used: 1
      Well selection: Column=0 Row=2
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    Task BuiltIn::Group End
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  Pipette_Process Name=WB3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 13
      Head mode: Channels=0 ColumnCount=12 RowCount=3 SubsetConfig=1 SubsetType=2 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: Tips On 3
      Location, location: 2
      Well selection: Column=0 Row=5
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    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: WB3
      Volume: 180
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      Location, plate: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.5
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task BuiltIn::Reserve Location
      TaskScript: if(protocol_testing  || skip_long_inc){task.Reservationtime = 10}
      Location to use, plate: 6
      Location to use, location: 6
      Reservation time: 60
    Task BuiltIn::Loop
      Number of times to loop: 4
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=loop
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      TaskScript:
        if(loop == 1){
           task.Volume = 180
           task.Distancefromwellbottom = 0
           task.Dynamictipextension = 0.01
           task.Pipettetechnique = "pipet on northwest corner"
        }
        else if(loop == 2){
           task.Pipettetechnique = "pipet on northeast corner"
        }
        else if(loop == 3){
           task.Pipettetechnique = "pipet on southeast corner"
        }
        else if(loop == 4){
           task.Pipettetechnique = "pipet on southwest corner"
        }
      Location, plate: 6
      Volume: 10
      Post-aspirate volume: 2
      Liquid class: Ethanol to waste long wait
      Distance from well bottom: 0
      Well selection: Column=0 Row=2
      Pipette technique: pipet on northwest corner
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      TaskScript:
        if(loop != 1){
        task.skip()
        }
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task BuiltIn::Loop End
    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: 7
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 20
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 10
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      Location, plate: Tips Off 3
      Mark tips as used: 1
      Well selection: Column=0 Row=5
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    Task BuiltIn::Group End
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