<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='0' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='0' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Device Files\BravoMiniPHBenchCel2R_round_magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Forms\SpatialTranscriptomics_v.B1.0.2.VWForm' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='open( &apos;C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/tiptracking.js&apos;);
open( &apos;C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/file_operations.js&apos;);
' Use_Global_JS_Context='1' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<TaskScript Name='TaskScript' Value='if(!protocol_testing &amp;&amp; !skip_long_inc){
   task.skip()
}' />
					<Parameters >
						<Parameter Category='' Name='Title' Value='' />
						<Parameter Category='' Name='Body' Value='WARNING: A checkbox under TESTING ONLY has been selected. This will reduce incubation times, mix cycles, and temperature settings. If this is desired, click Continue, otherwise, click pause, uncheck the box, and then click Continue.' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(protocol_testing){task.skip()}
//targeting 16C' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='2' />
						<Parameter Category='' Name='Timeout' Value='10' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(protocol_testing){task.skip()}' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='6' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='20' />
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						<Parameter Category='Task Description' Name='Task description' Value='Set temperature - Position at Location 6' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='4' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='1' />
						<Parameter Category='' Name='Timeout' Value='20' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='' />
						<Parameter Category='' Name='Body' Value='CPACs have reached temperature
Please place plates on Bravo deck' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='//sets head_mode var based on column number
//only used in spri steps
setHeadForRun(columns_samples)

//used for special tip tracking in purification protocol 
section = &quot;1A&quot;' />
					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='96 Costar 3961 PP 2ml assay block' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='tips1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Spawn Process' >
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					<Parameters >
						<Parameter Category='' Name='Process to spawn' Value='MasterMix Plate' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='RNase H addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='RNase H addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Incubate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(protocol_testing || skip_long_inc){
task.Incubationtime = 10
}
update_status(&quot;2 hour incubation at 16C&quot;)' />
					<Parameters >
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						<Parameter Category='' Name='Incubation time' Value='7200' />
						<Parameter Category='' Name='Use relative timing' Value='0' />
						<Parameter Category='' Name='Allow plates to incubate at locations with BCRs' Value='0' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='Waitfor2hrIncubationFinish' />
					</Waitfors_To_Signal>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='WaitforReagentPlateMove' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Reaction Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='RNase H addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='RNase H addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Wait For' Waitfor='Waitfor2hrIncubationFinish' >
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				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Signal' >
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					<Waitfors_To_Signal >
						<Waitfor Name='WaitforReagentPlateMove' />
					</Waitfors_To_Signal>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='MasterMix Plate' />
					<Parameter Name='Plate type' Value='96 Eppendorf Twin.tec PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='RNase H addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='RNase H addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!isEmpty()){
need_tips = 0
  }else
   {task.skip();
    }' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(isEmpty()){
print(&quot;Moving empty tip box to position 8 for next protocol&quot;)
need_tips = 1
tipBox++
  }else
   {task.skip();
    }' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='tips1' />
					<Parameter Name='Plate type' Value='96 V11 LT180 Tip Box 19477.002 FILTERED' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='RNase H addition' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='RNase H addition' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='8' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(!isFull()){
  print(&quot;Used tip box is not full so keeping at position 8.&quot;);
  }else
   {task.skip();
    }

' />
					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Upstack' >
					<Devices >
						<Device Device_Name='BenchCel - 1' Location_Name='Stacker 2' />
					</Devices>
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					<TaskScript Name='TaskScript' Value='if(isFull()){
  print(&quot;Used tip box is full so upstacking to stacker 2&quot;);
  }else
   {task.skip();
    }

' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='emptytips1' />
					<Parameter Name='Plate type' Value='96 V11 LT180 Tip Box 19477.002 FILTERED' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='RNase H addition' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<TaskScript Name='TaskScript' Value='update_status(&quot;Adding RNA Digestion Mix to RNA:cDNA hybrid&quot;)

col = 0
used_col = 0
tips_on_loc = 13
tips_off_loc = 13
tipBox = 1' />
					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='8' SubsetConfig='3' SubsetType='1' TipType='0' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' TaskParameterScript='=columns_samples' Value='1' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables >
						<Variable fIncrement='1' iFreqValue='0' strFrequency='Every time' strInitialValue='1' strVariableName='dispCol' />
					</Variables>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<TaskScript Name='TaskScript' Value='tips_on_loc = tips_on_loc - 1
task.Wellselection = [[ 1 , tips_on_loc ]]

print(&quot;Pressing tips on at &quot; + task.Wellselection)' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='tips1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;3&apos; SubsetType=&apos;1&apos; TipType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackNew(1)' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='MasterMix Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='3' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 5ul Mastermix' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,dispCol]]' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reaction Plate' />
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						<Parameter Category='Volume' Name='Volume' Value='5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 5ul Mastermix' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,dispCol]]

if(protocol_testing){
task.Mixcycles = 1
}' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reaction Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='60' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense at different distance' Value='1' />
						<Parameter Category='Distance From Well Bottom' Name='Dispense distance' Value='5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='task.Wellselection = [[1,dispCol]]' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Reaction Plate' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='fast dispense then long wait' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='None' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='-8' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<TaskScript Name='TaskScript' Value='tips_off_loc = tips_off_loc - 1
task.Wellselection = [[ 1 , tips_off_loc ]]
print(&quot;Taking tips off at &quot; + task.Wellselection)
' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='emptytips1' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='trackUsed(1)' />
					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Set temperature - Position' Task_Type='1024' >
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					<TaskScript Name='TaskScript' Value='if(protocol_testing){task.skip()}' />
					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='15' />
						<Parameter Category='' Name='Wait' Value='1' />
						<Parameter Category='' Name='Temperature Tolerance' Value='0' />
						<Parameter Category='' Name='Timeout' Value='60' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
		<Cleanup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='//overwrite ST_temp.txt with new variables 
//for use in the next protocol
//need_tips
//col
//used_col
//Nunc plate to use, etc.
Nunc_location = &quot;NA&quot;
spri_case = &quot;NA&quot;
Collection_location = &quot;NA&quot;
Destination_location= &quot;NA&quot;

var update_temp_file = (need_tips + &quot;\n&quot; + col + &quot;\n&quot; + used_col + &quot;\n&quot; + Nunc_location + &quot;\n&quot; + head_mode + &quot;\n&quot; + columns_samples + &quot;\n&quot; + tips_on_loc + &quot;\n&quot; + tips_off_loc + &quot;\n&quot; + spri_case + &quot;\n&quot; + protocol_testing + &quot;\n&quot; + tipBox + &quot;\n&quot; + Collection_location + &quot;\n&quot; + Destination_location)
file_overwrite(&quot;C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Scripts\\ST_temp.txt&quot; , update_temp_file)
' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cleanup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Cleanup_Processes>
	</Processes>
</Velocity11>