Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoLoadRacks: When the startup protocol starts
  Device_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Device Files\BravoMiniPHBenchCel2R_round_magnet.dev
  Form_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Forms\SpatialTranscriptomics_v.B1.0.2.VWForm
  StartScript:
    open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/tiptracking.js');
    open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/file_operations.js');
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      TaskScript:
        //get protocol variables from temp file
        getprotocolvariables()
      Device to use: Bravo - 1
      1: 96 Costar 3961 PP 2ml assay block
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript:
        //target 50C, position 6 should still be at 4C from previous protocols
        if(protocol_testing){task.skip()}
      Location: 4
      Temperature: 56
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: if(protocol_testing){task.skip()}
      Location: 6
      Temperature: 4
      Wait: 0
      Temperature Tolerance: 5
      Timeout: 1
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Main_Processes
  Process
    Plate name: Reaction Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips0.5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(need_tips != 1){
        task.skip()
        }
        else{
        tip_box_to_spawn = "tips0.5"
        }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(need_tips == 1){
        task.skip()
        }
      Process to spawn: tips0.5
    Task Bravo::SubProcess
      Sub-process name: Remove Vaporlock
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    Task Bravo::SubProcess
      Sub-process name: RT MM Addition
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    Task Bravo::SubProcess
      Sub-process name: Add vaporlock
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=4
      TaskScript:
        if(protocol_testing || skip_long_inc){
        task.Incubationtime = 10
        }
        update_status("1 hour incubation at 50C")
      Incubation time: 3600
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task BuiltIn::Spawn Process
      Process to spawn: Water Reservoir
    Task Bravo::SubProcess
      Sub-process name: Dilution before purification
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  Process
    Plate name: MasterMix Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: RT MM Addition
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    Task Bravo::SubProcess
      Sub-process name: Add vaporlock
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 9
  Process
    Plate name: Water Reservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Dilution before purification
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
  Process
    Plate name: TipControl
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      TaskScript:
        col = 0
        tips_on_loc = 0
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips0.5"){
        print("Spawning tips0.5 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips0.5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips1"){
        print("Spawning tips1 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips1
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips1.5"){
        print("Spawning tips1.5 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips1.5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips2"){
        print("Spawning tips2 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips2
  Process
    Plate name: tips1
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: RT MM Addition
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    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
        print("Spawning tips1.5 from tips1")
         }else
           {task.skip();
            }
      Process to spawn: tips1.5
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        print("Moving empty tip box to position 8 for next subprocess")
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
        print("Spawning emptytips1.5 from tips1")
          }else
           {task.skip();
            }
      Process to spawn: emptytips1.5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
        tip_box_to_spawn = "tips1.5"
        print("Spawning TipControl from tips1")
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
        tip_box_to_spawn = "tips1.5"
        print("Spawning TipUnload from tips1")
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips1
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: RT MM Addition
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    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Used tip box is not full so keeping at position 8.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips1.5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox < 12){
          print("Used tip box is full so upstacking to stacker 2");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox >= 12){
          print("Used tip box is full so upstacking to stacker 1");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 1
  Process
    Plate name: tips2
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Dilution before purification
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    Task BuiltIn::Place Plate
      TaskScript:
        if(!isEmpty()){
        need_tips = 0
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        print("Moving empty tip box to position 8 for next protocol")
        need_tips = 1
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Dilution before purification
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    Task BuiltIn::Place Plate
      TaskScript:
        if(!isFull()){
          print("Used tip box is not full so keeping at position 8.");
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox < 12){
          print("Used tip box is full so upstacking to stacker 2");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox >= 12){
          print("Used tip box is full so upstacking to stacker 1");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 1
  Process
    Plate name: Upstack 2
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript:
        used_col = 0
        tips_off_loc = 13
  Process
    Plate name: Upstack 1
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      TaskScript:
        used_col = 0
        tips_off_loc = 13
  Process
    Plate name: TipControlUnload
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript:
        col = 0
        tips_on_loc = 0
        task.unloadFrom = [tipLocation[tipBox-13]]
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips0.5"){
        print("Spawning tips0.5 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips0.5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips1"){
        print("Spawning tips1 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips1
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips1.5"){
        print("Spawning tips1.5 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips1.5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_spawn == "tips2"){
        print("Spawning tips2 from TipControl")
        }
        else{
        task.skip()
        }
      Process to spawn: tips2
  Process
    Plate name: tips0.5
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Vaporlock
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    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
        print("Spawning tips1 from tips0.5")
         }else
           {task.skip();
            }
      Process to spawn: tips1
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        print("Moving empty tip box to position 8 for next subprocess")
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
        print("Spawning emptytips1 from tips0.5")
          }else
           {task.skip();
            }
      Process to spawn: emptytips1
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
        tip_box_to_spawn = "tips1"
        print("Spawning TipControl from tips0.5")}
          else{task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
        tip_box_to_spawn = "tips1"
        print("Spawning TipUnload from tips0.5")
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips0.5
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Vaporlock
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    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Used tip box is not full so keeping at position 8.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips1
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox < 12){
          print("Used tip box is full so upstacking to stacker 2");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox >= 12){
          print("Used tip box is full so upstacking to stacker 1");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 1
  Process
    Plate name: tips1.5
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Add vaporlock
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    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
        print("Spawning tips2 from tips1.5")
         }else
           {task.skip();
            }
      Process to spawn: tips2
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        print("Moving empty tip box to position 8 for next subprocess")
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
        print("Spawning emptytips2 from tips1.5")
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
        tip_box_to_spawn = "tips2"
        print("Spawning TipControl from tips1.5")
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
        tip_box_to_spawn = "tips2"
        print("Spawning TipUnload from tips1.5")
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips1.5
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Add vaporlock
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    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Used tip box is not full so keeping at position 8.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox < 12){
          print("Used tip box is full so upstacking to stacker 2");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull() && tipBox >= 12){
          print("Used tip box is full so upstacking to stacker 1");
        	tips_off_loc = 13
        	used_col = 0
          }else
           {task.skip();
            }
      Process to spawn: Upstack 1
  Pipette_Process Name=Add vaporlock
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        update_status("Adding VaporLock on top of IVT reaction")

        /* for 12 column runs, use three columns vaporlock
        for 6 columns use 2
        for less than 6 use single column
        */

        if(columns_samples == 12){
        	task.Headmode = "1,1,8,3"
        	tips = 3
           //first tips on should be from [[1,1]]
           tips_on_loc = -2
           tips_off_loc = -2
        }
        else if(columns_samples == 6){
        	task.Headmode = "1,1,8,2"
        	tips = 2
           //first tips on should be from cols 7 & 8
           tips_on_loc = 5
           tips_off_loc = 5
        }
        else{
        	task.Headmode = "1,1,8,1"
        	tips = 1
        }

        dispCol = 1
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task BuiltIn::Loop
      TaskScript:
        if(columns_samples == 12){
        task.Numberoftimestoloop = 4
        }
        else if(columns_samples == 6){
        task.Numberoftimestoloop = 3
        }
        else{
        task.Numberoftimestoloop = columns_samples
        }
      Number of times to loop: 12
      Change tips every N times, N = : 1
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc + tips
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips1.5
      Well selection: Column=1 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(tips)
    Task Bravo::secondary::Aspirate
      Estimated time: 18
      Location, plate: MasterMix Plate
      Volume: 40
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 0.5
      Well selection: Column=5 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 22
      TaskScript: task.Wellselection = [[1,dispCol]]
      Location, plate: Reaction Plate
      Empty tips: 1
      Volume: 40
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 10
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc + tips
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips1.5
      Mark tips as used: 1
      Well selection: Column=1 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(tips)
    Task BuiltIn::Loop End
      TaskScript: dispCol = dispCol + tips
    Task BuiltIn::Group End
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  Pipette_Process Name=Dilution before purification
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        update_status("Diluting sample")

        task.Headmode = head_mode
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = 13 - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips2
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: Water Reservoir
      Location, location: 5
      Volume: 10
      Pre-aspirate volume: 5
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 5
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: //dispense above vaporlock
      Location, plate: Reaction Plate
      Location, location: 6
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 9
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch horizontal offset: -1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Reserve Location
      TaskScript: //bring pipette tip out of well
      Location to use, plate: Reaction Plate
      Reservation time: 5
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    Task Bravo::secondary::Move To Location
      Estimated time: 4
      Location: 1
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 35
      Location, plate: 1
      Volume: 50
      Mix cycles: 10
      Aspirate distance: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 17
      TaskScript: //aspirate off the vaporlock
      Location, plate: Reaction Plate
      Volume: 32
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 4.2
      Dynamic tip extension: 0.02
      Well selection: Column=0 Row=0
      Pipette technique: pipet on left side
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    Task Bravo::secondary::Dispense
      Estimated time: 9
      Location, plate: 1
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        tips_off_loc = 13 -columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips2
      Location, location: 8
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=RT MM Addition
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        update_status("Adding RT Master Mix")

        tips_on_loc = 0
        tips_off_loc =0
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=0 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task BuiltIn::Loop
      Number of times to loop: =columns_samples [1]
      Change tips every N times, N = : 1
      Variable fIncrement=1 iFreqValue=0 strFrequency=Every time strInitialValue=1 strVariableName=dispCol
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc + 1
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(1)
    Task Bravo::secondary::Aspirate
      Estimated time: 10
      Location, plate: MasterMix Plate
      Volume: 8
      Pre-aspirate volume: 5
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 0.5
      Well selection: Column=4 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        task.Wellselection = [[1,dispCol]]
      Location, plate: Reaction Plate
      Volume: 8
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 1
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 83
      TaskScript: task.Wellselection = [[1,dispCol]]
      Location, plate: Reaction Plate
      Volume: 15
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Mix cycles: 10
      Aspirate distance: .5
      Dispense at different distance: 1
      Dispense distance: 2
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 6
      TaskScript:
        task.Wellselection = [[1,dispCol]]
      Location, plate: Reaction Plate
      Volume: 8
      Blowout volume: 3
      Liquid class: RnaseH DNA pol I mix
      Distance from well bottom: 8
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: -4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc + 1
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips1
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(1)
    Task BuiltIn::Loop End
    Task Bravo::secondary::Set temperature - Position
      Estimated time: 2
      TaskScript:
        //target 50C
        if(protocol_testing){task.skip()}
      Location: 4
      Temperature: 56
      Wait: 1
      Temperature Tolerance: 0
      Timeout: 60
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    Task BuiltIn::Group End
      TaskScript: stack = "dilution"
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  Pipette_Process Name=Remove Vaporlock
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        update_status("Removing vaporlock")

        task.Headmode = head_mode

        //if 1,2, or 3 column runs, some tips already removed from right side of tip box
        if (columns_samples == 1){
          tips_on_loc = 4
          tips_off_loc = 4
        }
        else if (columns_samples == 2){
           tips_on_loc = 5
           tips_off_loc = 5
        }
        else if (columns_samples == 3){
           tips_on_loc = 7
           tips_off_loc = 7
        }
        else{
           tips_on_loc = 13 - columns_samples
           tips_off_loc = 13 - columns_samples
        }
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=2 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips0.5
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript: //aspirate off the vaporlock
      Location, plate: Reaction Plate
      Volume: 35
      Liquid class: 96 disposable tip 2 - 50ul
      Distance from well bottom: 2.6
      Dynamic tip extension: 0.05
      Well selection: Column=0 Row=0
      Pipette technique: pipet on left side
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    Task Bravo::secondary::Dispense
      Estimated time: 419
      Location, plate: 1
      Empty tips: 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 30
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips0.5
      Location, location: 8
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task BuiltIn::JavaScript
      TaskScript:
        //overwrite ST_temp.txt with new variables
        //for use in the next protocol
        //need_tips
        //col
        //used_col
        //Nunc plate to use, etc.

        Nunc_location = "Cassette2Slot5" //where to take cleanup plate from
        spri_case = 4 // what volumes to use
        Destination_location = "Cassette1Slot3" // where to load used sample plate
        Collection_location = "Cassette2Slot4" // where to unload new plate for sample collection

        var update_temp_file = (need_tips + "\n" + col + "\n" + used_col + "\n" + Nunc_location + "\n" + head_mode + "\n" + columns_samples + "\n" + tips_on_loc + "\n" + tips_off_loc + "\n" + spri_case + "\n" + protocol_testing + "\n" + tipBox + "\n" + Collection_location + "\n" + Destination_location)
        file_overwrite("C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Scripts\\ST_temp.txt" , update_temp_file)
