Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  Device_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Device Files\BravoMiniPHBenchCel2R_round_magnet.dev
  Form_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Forms\STANDALONE_SpatialTranscriptomics_v.B1.0.2.VWForm
  PipettePlatesInInstanceOrder: 1
  StartScript:
    open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/Purification_TipTracking.js');
    open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/file_operations.js');
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      TaskScript:
        //get variables from previous protocol

        getprotocolvariables()

        //when running 96 sample batches, some tip boxes will be taken from minihub
        //reset tips because used both right and left side of tips in Part 1A for smaller sample numbers
        //every tips off operation, including first, has tips_on_loc MINUS columns_samples

        if (section == "1A" && columns_samples < 4){
        	tips_on_loc = 13 - columns_samples
        	tips_off_loc = 13 - columns_samples
        }
        else if (section == "1A" && columns_samples == 6){
        //tip box will start first purification with only tips in col 7-12 for 6 col runs
        	tips_on_loc = 13
        	tips_off_loc = 13
        }
        else if(section == "2F" && columns_samples <= 4){
        	tips_on_loc = 13 - columns_samples
        	tips_off_loc = 13 - columns_samples
        }
        else if (section == "2H"){
           if (columns_samples == 1 || columns_samples == 2 || columns_samples == 3){
        	   tips_on_loc = 13 - columns_samples
        	   tips_off_loc = 13 - columns_samples
        	}
        }

        /* this protocol is used for all
        four purifications, different static labware
        based on what the preceeding protocol was
        put them all as static for ease*/
      Device to use: Bravo - 1
      4: 96 Eppendorf Twin.tec PCR
      9: 96 Eppendorf Twin.tec PCR
    Task BuiltIn::JavaScript
      TaskScript:
        //Modified Protocol adapted by Margaret Tyer (mtyer@broadinstitute.org)
        //Need to define case in order for the protocol to run

        switch (spri_case){
          case 5:
           bead_vol = 40
           dna_vol = 40
           elute_vol = 14
           dry_time = 480
           vapor_lock = 0
        break;
        }

        dna_bead_vol = bead_vol + dna_vol
        sup_vol = dna_bead_vol - 5
        print("The volumes used in this protocol are from case " + spri_case)
        print("The volume of DNA and beads is " + dna_bead_vol + "ul")
        print("The elution volume is " + elute_vol + "ul")

        update_status("Starting purification")
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: if(protocol_testing){task.skip()}
      Location: 4
      Temperature: 4
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: if(protocol_testing){task.skip()}
      Location: 6
      Temperature: 4
      Timeout: 1
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Main_Processes
  Process
    Plate name: AMPureXP Cleanup 1
    Plate type: 96 Eppendorf Twin.tec PCR
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    Device Device_Name=Bravo - 1 Location_Name=5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips2
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      TaskScript:
        if(protocol_testing){
        task.skip()
        }
        else{
        update_status("Incubating for 5 minutes")
        }
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if(protocol_testing){
        task.skip()
        }
        else{
        update_status("Incubating for 5 minutes")
        }
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Spawn Process
      Process to spawn: Ethanol
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if(protocol_testing){
        task.skip()
        }
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 1
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if(protocol_testing){
        task.skip()
        }
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 2
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 3
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 3
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if(protocol_testing) {
        task.skip()
        }
        else{
        update_status("Drying beads for 4 minutes")
        }
      Incubation time: 240
      Use relative timing: 0
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    Task BuiltIn::Wait For
      Waitfor: Wait For
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task BuiltIn::Spawn Process
      Process to spawn: Elution Buffer
    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer to Dried Beads
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      TaskScript:
        if(protocol_testing){
        task.skip()
        }
        else{
        update_status("Incubating for 2 minutes")
        }
      Incubation time: 120
      Use relative timing: 0
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 7
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if(protocol_testing){
        task.skip()
        }
        else{
        update_status("Incubating for 5 minutes")
        }
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Spawn Process
      Process to spawn: Collection Plate
    Task Bravo::SubProcess
      Sub-process name: Collect Elution Buffer and Transfer
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      TaskScript:
        col = 0

        tips_on_loc = 13
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      Process to spawn: usedtips3
  Process
    Plate name: Reaction Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Device Device_Name=Bravo - 1 Location_Name=6
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: LocationGroup+Cassette1Slot4
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: LocationGroup+Cassette1Slot4
  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript: print("Upstacking " + plate.name + " " + plate.instance)
  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: usedtips5
    Task BuiltIn::Spawn Process
      Process to spawn: tips5
  Process
    Plate name: usedtips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript: print("Upstacking " + plate.name + " " + plate.instance)
  Process
    Plate name: Ethanol
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: LocationGroup+Cassette3Slot1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 3
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
      Waitfor: Wait For
  Process
    Plate name: tips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 1
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: tips6
    Task BuiltIn::Spawn Process
      Process to spawn: usedtips6
  Process
    Plate name: usedtips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 1
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript: print("Upstacking " + plate.name + " " + plate.instance)
  Process
    Plate name: tips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 2
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: tips7
    Task BuiltIn::Spawn Process
      Process to spawn: usedtips7
  Process
    Plate name: usedtips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 2
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript: print("Upstacking " + plate.name + " " + plate.instance)
  Process
    Plate name: tips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 3
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 3
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: tips8
    Task BuiltIn::Spawn Process
      Process to spawn: usedtips8
  Process
    Plate name: usedtips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 3
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript: print("Upstacking " + plate.name + " " + plate.instance)
  Process
    Plate name: tips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer to Dried Beads
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Wait For
      Waitfor: Wait For_1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      Process to spawn: tips9
    Task BuiltIn::Spawn Process
      Process to spawn: usedtips9
  Process
    Plate name: usedtips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer to Dried Beads
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Wait For
      Waitfor: Wait For_2
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript: print("Upstacking " + plate.name + " " + plate.instance)
  Process
    Plate name: Elution Buffer
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: LocationGroup+Cassette1Slot2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: Add Elution Buffer to Dried Beads
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
    Task BuiltIn::Signal
      Waitfors_To_Signal
        Waitfor: Wait For_1
        Waitfor: Wait For_2
  Process
    Plate name: tips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Collect Elution Buffer and Transfer
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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  Process
    Plate name: usedtips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Collect Elution Buffer and Transfer
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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  Process
    Plate name: Collection Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: LocationGroup+Cassette2Slot5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Collect Elution Buffer and Transfer
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
  Process
    Plate name: Waste
    Plate type: 96 Costar 3961 PP 2ml assay block
    Automatically update labware: 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 1
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 2
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task Bravo::SubProcess
      Sub-process name: Remove Ethanol 3
      Static labware configuration 1: 96 Costar 3961 PP 2ml assay block
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 1
  Pipette_Process Name=Add Elution Buffer to Dried Beads
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Adding elution buffer to dried beads")
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips8
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: Elution Buffer
      Volume: =elute_vol+2 [10]
      Pre-aspirate volume: 15
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: AMPureXP Cleanup 1
      Volume: =elute_vol+2 [16]
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 5
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPureXP Cleanup 1
      Volume: 10
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 5
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPureXP Cleanup 1
      Volume: 10
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 5
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPureXP Cleanup 1
      Volume: 10
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 7
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPureXP Cleanup 1
      Volume: 10
      Blowout volume: 5
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch retract distance: 10
      Tip touch horizontal offset: -2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 4
      Location, plate: AMPureXP Cleanup 1
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 3.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: usedtips8
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Collect Elution Buffer and Transfer
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 9
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Transfer eluted sample to collection plate")
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 11
      Location, plate: AMPureXP Cleanup 1
      Volume: =elute_vol+2 [10]
      Pre-aspirate volume: 1
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 0.1
      Dynamic tip extension: 0.01
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: AMPureXP Cleanup 1
      Reservation time: 15
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: AMPureXP Cleanup 1
      Volume: 1
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch retract distance: 7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      TaskScript: print("Transfering " + task.Volume + "ul to collection plate.")
      Location, plate: Collection Plate
      Empty tips: 1
      Volume: 10
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 6
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: usedtips9
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=DNA Addition
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Adding Sample to beads")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 4
      Location, plate: Reaction Plate
      Volume: 10
      Distance from well bottom: 25
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 13
      Location, plate: Reaction Plate
      Volume: =dna_vol [10]
      Pre-aspirate volume: 2
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.05
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: AMPureXP Cleanup 1
      Volume: =dna_vol [10]
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 8
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPureXP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 7
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPureXP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 7
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPureXP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPureXP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch retract distance: 10
      Tip touch horizontal offset: -2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 7
      Location, plate: AMPureXP Cleanup 1
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 11 ul- 50ul
      Distance from well bottom: 3
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips2
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Ethanol Wash 1")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips5
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 15
      Location, plate: Ethanol
      Location, location: 5
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: AMPureXP Cleanup 1
      Location, location: 7
      Empty tips: 1
      Volume: 170
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Dynamic tip retraction: 0.02
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tips5
      Location, location: 2
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Ethanol Wash 2")
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      Location, plate: Ethanol
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: AMPureXP Cleanup 1
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Dynamic tip retraction: 0.02
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tips6
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Ethanol Wash 3")
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 8
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 16
      Location, plate: Ethanol
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 14
      Location, plate: AMPureXP Cleanup 1
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Dynamic tip retraction: 0.02
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      Location, plate: tips7
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Ethanol 1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Remove Ethanol 1")
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 42
      Location, plate: AMPureXP Cleanup 1
      Volume: 180
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.85
      Dynamic tip extension: 0.01
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: usedtips5
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Ethanol 2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Remove Ethanol 2")
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 7
      Location, plate: tips6
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 42
      Location, plate: AMPureXP Cleanup 1
      Volume: 180
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.85
      Dynamic tip extension: 0.01
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: usedtips6
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Ethanol 3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 14
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Remove Ethanol 3")
      Head mode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      Location, plate: tips7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 42
      Location, plate: AMPureXP Cleanup 1
      Volume: 180
      Liquid class: Ethanol to waste
      Distance from well bottom: 1.35
      Dynamic tip extension: 0.01
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: AMPureXP Cleanup 1
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.1
      Dynamic tip extension: 0.01
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 10
      Location, plate: Waste
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=0 SubsetType=0 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: usedtips7
      Mark tips as used: 1
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Supernatant
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 14
      TaskScript:
        task.Headmode ="3,1,8," + columns_samples
        print("The head mode is " + task.Headmode)
        update_status("Removing supernatant")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips3
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 26
      TaskScript: task.Volume = sup_vol
      Location, plate: AMPureXP Cleanup 1
      Volume: 1
      Pre-aspirate volume: 30
      Liquid class: Ethanol to waste
      Distance from well bottom: 1.65
      Dynamic tip extension: 0.007
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 13
      Location, plate: Waste
      Empty tips: 1
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=12 RowCount=8 SubsetConfig=1 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 7
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: usedtips3
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
