Velocity11 Protocol_Data 2.0
File_Info
  AllowSimultaneousRun: 0
  AutoLoadRacks: When the startup protocol starts
  Device_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Device Files\BravoMiniPHBenchCel2R_round_magnet.dev
  Form_File: C:\VWorks Workspace\NGS Option B\SpatialTranscriptomics_v.B1.0.2\Forms\SpatialTranscriptomics_v.B1.0.2.VWForm
  PipettePlatesInInstanceOrder: 1
  StartScript:
    open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/file_operations.js');
    open( 'C:/VWorks Workspace/NGS Option B/SpatialTranscriptomics_v.B1.0.2/Scripts/tiptracking.js');
  Use_Global_JS_Context: 1
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Startup_Processes
  Process
    Plate name: startup process - 1
    Task BuiltIn::Configure Labware
      TaskScript:
        //get variables from previous protocol

        getprotocolvariables()

        //when running 96 sample batches, some tip boxes will be taken from minihub
        //reset tips because used both right and left side of tips in Part 1A for smaller sample numbers
        //every tips off operation, including first, has tips_on_loc MINUS columns_samples

        if (section == "1A" && columns_samples < 4){
        	tips_on_loc = 13 - columns_samples
        	tips_off_loc = 13 - columns_samples
        }
        else if (section == "1A" && columns_samples == 6){
        //tip box will start first purification with only tips in col 7-12 for 6 col runs
        	tips_on_loc = 13
        	tips_off_loc = 13
        }
        else if(section == "2F" && columns_samples <= 4){
        	tips_on_loc = 13 - columns_samples
        	tips_off_loc = 13 - columns_samples
        }
        else if (section == "2H"){
           if (columns_samples == 1 || columns_samples == 2 || columns_samples == 3){
        	   tips_on_loc = 13 - columns_samples
        	   tips_off_loc = 13 - columns_samples
        	}
        }

        /* this protocol is used for all
        four purifications, different static labware
        based on what the preceeding protocol was
        put them all as static for ease*/
      Device to use: Bravo - 1
      1: 96 Costar 3961 PP 2ml assay block
      4: 96 Eppendorf Twin.tec PCR
      9: 96 Eppendorf Twin.tec PCR
    Task BuiltIn::JavaScript
      TaskScript:
        /* spri_case 1 is Part 1 Step B cDNA purification
        spri_case 2 is Part 1 Step D aRNA purification
        spri_case 3 is Part 2 Step G post-ligation purification
        spri_case 4 is Part 2 Step I final cDNA purification
        elute_vol is amount actually collected
        beads are resuspended in elute_vol + 2
        dry_time is in seconds // hardcoded to 5 minutes now
        vapor_lock indicates if vaporlock is on top of the sample to be purified
        if vapor_lock is used, sample will be aspirated from bottom of well with no overaspiration or dynamic tip extension
        */

        switch (spri_case){

          case 1:
        	bead_vol = 100
        	dna_vol = 100
        	elute_vol = 15
        	dry_time = 540
        	vapor_lock = 0
           break;

          case 2:
        	bead_vol = 81
        	dna_vol = 48
        	elute_vol = 12
        	dry_time = 480
        	vapor_lock = 1
           break;

          case 3:
        	bead_vol = 54
        	dna_vol = 31
        	elute_vol = 12
        	dry_time = 480
        	vapor_lock = 0
           break;

          case 4:
        	bead_vol = 54
        	dna_vol = 40
        	elute_vol = 15
        	dry_time = 480
        	vapor_lock = 1
           break;
        }

        dna_bead_vol = bead_vol + dna_vol
        sup_vol = dna_bead_vol - 5
        print("The volumes used in this protocol are from case " + spri_case)
        print("The volume of DNA and beads is " + dna_bead_vol + "ul")
        print("The elution volume is " + elute_vol + "ul")

        update_status("Starting purification")
    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: if(protocol_testing){task.skip()}
      Location: 4
      Temperature: 4
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      TaskScript: if(protocol_testing){task.skip()}
      Location: 6
      Temperature: 4
      Timeout: 1
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Main_Processes
  Process
    Plate name: AMPure XP Cleanup 1
    Plate type: 96 Eppendorf Twin.tec PCR
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    Device Device_Name=Bravo - 1 Location_Name=5
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript: task.unloadFrom = [Nunc_location]
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 3, slot 5
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        if(need_tips && tipBox < 13){
            print("Tip box from previous protocol was used up.  Spawning new tip box.")
        	var tip_box_to_Spawn = "tips2"
        }
        else{
        task.skip();
        }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        if(need_tips && tipBox >= 13){
            print("Tip box from previous protocol was used up.  Spawning new tip box.")
        	var tip_box_to_Spawn = "tips2"
        }
        else{
        task.skip();
        }
      Process to spawn: TipControlUnload
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to put something here to execute if not
        //using runset

        if(!need_tips){
            print("Tip box from previous protocol not used up.  Spawning tips at 2.")
        }
        else{
        task.skip();
        }
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      Process to spawn: emptytips2
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=5
      TaskScript:
        //for real run use 5 minutes

        if(protocol_testing || skip_long_inc) task.Incubationtime = 10;

        update_status("Incubating for 15 minutes")
      Incubation time: 900
      Use relative timing: 0
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if(protocol_testing) task.Incubationtime = 10;

        update_status("5 minute incubation on magnet")
      Incubation time: 300
      Use relative timing: 0
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    Task BuiltIn::Spawn Process
      Process to spawn: Ethanol Reservoir
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript: if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 1
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 2
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 3
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 1 minute

        if(protocol_testing) task.Incubationtime = 10;
      Incubation time: 60
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 3
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    Task BuiltIn::Signal
      Waitfor: WaitForTipsOff
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        if(protocol_testing) {task.Incubationtime = 10;}
        else{
        //task.Incubationtime = dry_time
        }

        update_status("Drying beads for 5 minutes") //+ dry_time/60 + " minutes")
      Incubation time: 120
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=6
      TaskScript:
        //for real run use 2 minutes

        if(protocol_testing) task.Incubationtime = 10

        update_status("Incubating for 2 minutes")
      Incubation time: 120
      Use relative timing: 0
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    Task BuiltIn::Spawn Process
      Process to spawn: Sample Collection Plate
    Task BuiltIn::Incubate
      Device Device_Name=Bravo - 1 Location_Name=7
      TaskScript:
        //for real run use 5 minutes

        if(protocol_testing) task.Incubationtime = 10

        update_status("Incubating on magnet for 2 minutes")
      Incubation time: 300
      Use relative timing: 0
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    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript: task.loadIntoByLocation = [Nunc_location]
      useOriginalLocations: 1
  Process
    Plate name: Reaction Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript: task.loadIntoByLocation = [Destination_location]
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 5
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  Process
    Plate name: Ethanol Reservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 1
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 5
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 3
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    Task BuiltIn::Wait For
      Waitfor: WaitForTipsOff
    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 1
    Task BuiltIn::Spawn Process
      Process to spawn: Water Reservoir
  Process
    Plate name: Water Reservoir
    Plate type: 96 Matrix open reservoir movable
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    Task BuiltIn::Wait For
      Waitfor: WaitforTipLoad
    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 1, slot 2
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 3
    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::Load
      Device Device_Name=Agilent Labware MiniHub - 1
      useOriginalLocations: 1
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 2, slot 4
  Process
    Plate name: Sample Collection Plate
    Plate type: 96 Eppendorf Twin.tec PCR
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript: task.unloadFrom = [Collection_location]
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 5
    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 6
    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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  Process
    Plate name: TipControl
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Downstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      Free empty stackers: 1
    Task BuiltIn::Place Plate
      TaskScript:
        col = 0

        tips_on_loc = 13
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates
        if(tip_box_to_Spawn == "tips2"){
           print("Spawning new tipbox for tips2.")
           }else
            {task.skip();
            }

        /*
        if((plate.instance % 2) == 0){
           print("Spawning tips1.")
           }else
            {task.skip();
            }
        */
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn == "tips3"){
           print("Spawning new tipbox for tips3.")
           }else
            {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips5"){
           print("Spawning new tipbox for tips5.")
           }else
            {task.skip();
            }
      Process to spawn: tips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips6"){
           print("Spawning new tipbox for tips6.")
           }else
            {task.skip();
            }
      Process to spawn: tips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips7"){
           print("Spawning new tipbox for tips7.")
           }else
            {task.skip();
            }
      Process to spawn: tips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips8"){
           print("Spawning new tipbox for tips8.")
           }else
            {task.skip();
            }
      Process to spawn: tips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips9"){
           print("Spawning new tipbox for tips9.")
           }else
            {task.skip();
            }
      Process to spawn: tips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips10"){
           print("Spawning new tipbox for tips10.")
           }else
            {task.skip();
            }
      Process to spawn: tips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips11"){
           print("Spawning new tipbox for tips11.")
           }else
            {task.skip();
            }
      Process to spawn: tips11
  Process
    Plate name: TipControlUnload
    Plate type: 96 V11 LT180 Tip Box 19477.002 FILTERED
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    Task BuiltIn::Unload
      Device Device_Name=Agilent Labware MiniHub - 1
      TaskScript: task.unloadFrom = [tipLocation[tipBox-13]]
      Unload based on barcode: 0
      Barcode Side: West
      RemoveFromGroups: 0
      AssignedLocations_Node
        LocationInfo: Agilent Labware MiniHub - 1, cassette 4, slot 1
    Task BuiltIn::Place Plate
      TaskScript:
        col = 0

        tips_on_loc = 13
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates
        if(tip_box_to_Spawn == "tips2"){
           print("Spawning new tipbox for tips2.")
           }else
            {task.skip();
            }

        /*
        if((plate.instance % 2) == 0){
           print("Spawning tips1.")
           }else
            {task.skip();
            }
        */
      Process to spawn: tips2
    Task BuiltIn::Spawn Process
      TaskScript:
        //need to fix this if doing more than 2 plates

        if(tip_box_to_Spawn == "tips3"){
           print("Spawning new tipbox for tips3.")
           }else
            {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips5"){
           print("Spawning new tipbox for tips5.")
           }else
            {task.skip();
            }
      Process to spawn: tips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips6"){
           print("Spawning new tipbox for tips6.")
           }else
            {task.skip();
            }
      Process to spawn: tips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips7"){
           print("Spawning new tipbox for tips7.")
           }else
            {task.skip();
            }
      Process to spawn: tips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips8"){
           print("Spawning new tipbox for tips8.")
           }else
            {task.skip();
            }
      Process to spawn: tips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips9"){
           print("Spawning new tipbox for tips9.")
           }else
            {task.skip();
            }
      Process to spawn: tips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips10"){
           print("Spawning new tipbox for tips10.")
           }else
            {task.skip();
            }
      Process to spawn: tips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(tip_box_to_Spawn == "tips11"){
           print("Spawning new tipbox for tips11.")
           }else
            {task.skip();
            }
      Process to spawn: tips11
  Process
    Plate name: UsedTipUpstack
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        //upstack to stacker 2 if there's room, otherwise use stacker 1
        if(tipBox >= 12){
        task.skip()
        }
      Process to spawn: Upstack 2
    Task BuiltIn::Spawn Process
      TaskScript:
        //upstack to stacker 2 if there's room, otherwise use stacker 1
        if(tipBox < 12){
        task.skip()
        }
      Process to spawn: Upstack 1
  Process
    Plate name: tips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips3
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips3"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips3"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: DNA Addition
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips3
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips5
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips5"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips5"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips3
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Remove Supernatant
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips5
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips6
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips6"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips6"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips5
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 1
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    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 1
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips6
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips7
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips7"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips7"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips6
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips7
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips8
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips8"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips8"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips7
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 2
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips9
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips9"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips9"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips8
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Wash 3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips9
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips10
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips10"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips10"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips9
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Ethanol Aspiration 3
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips10
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: Upstack 2
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 2
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Process
    Plate name: Upstack 1
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Upstack
      Device Device_Name=BenchCel - 1 Location_Name=Stacker 1
      TaskScript:
        used_col = 0

        tips_off_loc = 13
  Process
    Plate name: tips10
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Signal
      Waitfor: WaitforTipLoad
    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: tips11
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty()){
          }else
           {task.skip();
            }
      Process to spawn: emptytips11
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox < 13){
           tip_box_to_Spawn = "tips11"
          }else
           {task.skip();
            }
      Process to spawn: TipControl
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isEmpty() && tipBox >= 13){
           tip_box_to_Spawn = "tips11"
          }else
           {task.skip();
            }
      Process to spawn: TipControlUnload
  Process
    Plate name: emptytips10
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Elution
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(!isFull()){
          print("Tip box is not full so it will move to next subprocess.");
          }else
           {task.skip();
            }
      Process to spawn: emptytips11
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
           print("Upstacking " + plate.name + " " + plate.instance)
           }else
           {task.skip()
            print("Tip box still has space.")
            }
      Process to spawn: UsedTipUpstack
  Process
    Plate name: tips11
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 2
    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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    Task BuiltIn::Place Plate
      TaskScript:
        if(!isEmpty()){
        need_tips = 0
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 2
    Task BuiltIn::Place Plate
      TaskScript:
        if(isEmpty()){
        print("Moving empty tip box to position 8 for next protocol")
        need_tips = 1
        tipBox++
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
  Process
    Plate name: emptytips11
    Plate type: 96 V11 LT250 Tip Box 19477.002
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    Task BuiltIn::Place Plate
      Device to use: Bravo - 1
      Location to use: 8
    Task Bravo::SubProcess
      Sub-process name: Sample Collection
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    Task BuiltIn::Place Plate
      TaskScript:
        if(!isFull()){
          print("Used tip box is not full so keeping at position 8.");
          }else
           {task.skip();
            }
      Device to use: Bravo - 1
      Location to use: 8
    Task BuiltIn::Spawn Process
      TaskScript:
        if(isFull()){
          print("Used tip box is full so upstacking to stacker 2");
          }else
           {task.skip();
            }
      Process to spawn: UsedTipUpstack
  Pipette_Process Name=DNA Addition
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)

        update_status("Adding Sample to beads")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips2
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        //if running a full plate, need to re-use these tips or else not enough tip space on workstation
        //do not want to track them during first usage
        if(columns_samples != 12){
        trackNew(columns_samples)
        }
    Task Bravo::secondary::Aspirate
      Estimated time: 5
      TaskScript: //large pre-aspirate before mix
      Location, plate: Reaction Plate
      Volume: 10
      Distance from well bottom: 25
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      TaskScript:
        if (vapor_lock == 0){
        task.Volume = (parseInt(dna_vol) + 8)
        //task.Dynamictipextension = 0.036
        //task.Distancefromwellbottom = 0.25
        }
        else{
        task.Volume = dna_vol
        //task.Dynamictipextension = 0
        //task.Distancefromwellbottom = 0.25
        }
      Location, plate: Reaction Plate
      Location, location: 6
      Volume: 0
      Pre-aspirate volume: 2
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.05
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      TaskScript:
        //dispense over asp above liquid level
        if (vapor_lock == 1){
        task.skip()
        }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 5
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 13
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 12
      TaskScript: task.Volume = dna_vol
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 0
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 2
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        //at loop end, pipette tip comes up out of plate and gets beads on edges of wells
        //had to expand out of loop to prevent this
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on left side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on north side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on right side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on left side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on north side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on right side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 10
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on left side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on north side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 9
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on right side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript:
        if(dna_bead_vol <= 180){
            task.Volume = (dna_bead_vol - 20)
            print("Mixing DNA and beads with volume " + task.Volume)
           }else
           {task.Volume = 140
             print ("DNA and beads exceed 180ul or the volume of the tip, mixing with 150ul")
            }
      Location, plate: AMPure XP Cleanup 1
      Location, location: 5
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 2
      Aspirate distance: 1
      Dispense at different distance: 1
      Dispense distance: 4
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch retract distance: 10
      Tip touch horizontal offset: -2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 8
      Location, plate: AMPure XP Cleanup 1
      Empty tips: 1
      Volume: 10
      Liquid class: 96 disposable tip 11 ul- 50ul
      Distance from well bottom: 3
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 9
      TaskScript:
        //if running a full plate, need to re-use these tips or else not enough tip space on workstation
        if(columns_samples == 12){
        task.Location_plate = "tips2"
        task.Wellselection = [[1,1]]
        }
        else{
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
        }
      Location, plate: emptytips2
      Mark tips as used: 0
      Well selection: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        //if running a full plate, need to re-use these tips or else not enough tip space on workstation
        //do not want to track them during first usage
        if(columns_samples != 12){
        trackUsed(columns_samples)
        }
    Task BuiltIn::Group End
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  Pipette_Process Name=Elution
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On (Tips On (Bravo))
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips10
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=8 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate (Aspirate (Bravo))
      Estimated time: 12
      Location, plate: Water Reservoir
      Location, location: 5
      Volume: =elute_vol + 2 [30]
      Pre-aspirate volume: 15
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: =elute_vol + 2 [30]
      Liquid class: 96 disposable tip 10 - 50ul aq
      Distance from well bottom: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::JavaScript
      TaskScript:
        //at loop end, pipette tip comes up out of plate and gets beads on edges of wells
        //had to expand out of loop to prevent this
    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 12
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on left side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on north side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on right side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 12
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on left side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on north side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on right side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 12
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on left side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on north side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on right side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 12
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on left side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 12
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on north side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 13
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on right side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Mix [Dual Height]
      Estimated time: 16
      TaskScript: task.Volume = elute_vol*0.8
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Volume: 150
      Blowout volume: 5
      Liquid class: Bead Mixing
      Mix cycles: 5
      Aspirate distance: 0.5
      Dispense at different distance: 1
      Dispense distance: 3
      Perform tip touch: 1
      Which sides to use for tip touch: South
      Tip touch retract distance: 10
      Tip touch horizontal offset: -2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      Pipette technique: pipet on south side
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: AMPure XP Cleanup 1
      Location to use, location: 6
      Reservation time: 5
    Task Bravo::secondary::Dispense
      Estimated time: 5
      Location, plate: AMPure XP Cleanup 1
      Location, location: 6
      Empty tips: 1
      Blowout volume: 2
      Liquid class: fast dispense then long wait
      Distance from well bottom: 3.5
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips10
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=8 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Aspiration 1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)

        update_status("Removing ethanol wash 1")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        task.skip()
        /*
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips5
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 41
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Volume: 180
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.85
      Dynamic tip extension: 0.010
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: 1
      Empty tips: 1
      Volume: 170
      Blowout volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 9
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips5
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=8 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Aspiration 2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        task.skip()
        /*
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips7
      Location, location: 2
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 41
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Volume: 180
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.85
      Dynamic tip extension: 0.010
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: 1
      Empty tips: 1
      Volume: 170
      Blowout volume: 30
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 9
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips7
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Aspiration 3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 11
      TaskScript:
        task.skip()

        /*
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
        */
      Location, plate: tips9
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 41
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Volume: 180
      Liquid class: Ethanol to waste
      Distance from well bottom: 1.35
      Dynamic tip extension: 0.010
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 17
      Location, plate: 1
      Empty tips: 1
      Volume: 250
      Blowout volume: 1
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 9
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Volume: 10
      Liquid class: Ethanol to waste
      Distance from well bottom: 0.1
      Dynamic tip extension: 0.010
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: 1
      Empty tips: 1
      Volume: 250
      Blowout volume: 1
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: West/East
      Tip touch retract distance: 1
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips9
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 1
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)

        update_status("First Ethanol Wash")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips5
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=8 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      Location, plate: Ethanol Reservoir
      Location, location: 5
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Empty tips: 1
      Volume: 170
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Dynamic tip retraction: 0.02
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 9
      TaskScript:
        task.skip()
        /*
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
        */
      Location, plate: emptytips5
      Location, location: 8
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        task.skip()

        //trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 2
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)

        update_status("Second ethanol wash")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips6
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=4 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      Location, plate: Ethanol Reservoir
      Location, location: 5
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Empty tips: 1
      Volume: 170
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Dynamic tip retraction: 0.02
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 9
      TaskScript:
        task.skip()
        /*
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
        */
      Location, plate: emptytips6
      Location, location: 8
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        task.skip()
        //trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Ethanol Wash 3
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)

        update_status("Third ethanol wash")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips8
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 16
      Location, plate: Ethanol Reservoir
      Volume: 180
      Pre-aspirate volume: 10
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 0.9
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Empty tips: 1
      Volume: 250
      Blowout volume: 1
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 4
      Dynamic tip retraction: 0.02
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        task.skip()
        /*
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
        */
      Location, plate: emptytips8
      Location, location: 8
      Mark tips as used: 0
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript:
        task.skip()
        //trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Remove Supernatant
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      Estimated time: 8
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)

        update_status("Removing supernatant")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 10
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips3
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 31
      TaskScript:
        //if sup_vol is less than 185 skip this task
        //else divide by 2

        if(sup_vol <= 185){
            task.skip();
            print("Skipping first aspirate of supernatant");
            }else
            {task.Volume = sup_vol/2;
            }

        //task.Volume = ((parseInt(dna_vol) + parseInt(bead_vol))-8)/2
        print(task.Volume)
      Location, plate: AMPure XP Cleanup 1
      Volume: 140
      Pre-aspirate volume: 30
      Liquid class: Ethanol to waste
      Distance from well bottom: 4.65
      Dynamic tip extension: 0.010
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
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    Task Bravo::secondary::Dispense
      Estimated time: 15
      TaskScript:
        if(sup_vol <= 185){
            task.skip();
            print("Skipping first dispense of supernatant")
            }
      Location, plate: 1
      Empty tips: 1
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection: Column=0 Row=0
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    Task Bravo::secondary::Aspirate
      Estimated time: 37
      TaskScript:
        //if supe_vol is greater than 185, aspirate half
        //if supe_vol is less than 185, aspirate all

        if(sup_vol < 185){
           task.Volume = sup_vol
           }else
           {task.Volume = sup_vol/2
            }
      Location, plate: AMPure XP Cleanup 1
      Volume: 132
      Pre-aspirate volume: 30
      Liquid class: Ethanol to waste
      Distance from well bottom: 1.65
      Dynamic tip extension: 0.007
      Well selection: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 16
      Location, plate: 1
      Empty tips: 1
      Volume: 140
      Blowout volume: 2
      Liquid class: 96 disposable tip 50 - 180ul aq
      Distance from well bottom: 37
      Perform tip touch: 1
      Which sides to use for tip touch: South/North
      Tip touch retract distance: 1
      Tip touch horizontal offset: -0.4
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips3
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=0 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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  Pipette_Process Name=Sample Collection
    Device Device_Name=Bravo - 1 Location_Name=Default Location
    Task Bravo::secondary::Set Head Mode
      TaskScript:
        task.Headmode = head_mode

        print("The head mode is " + task.Headmode)

        update_status("Transferring purified sample to new plate")
      Head mode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
      PipetteHead: 96LT, 200 µL Series III
    Task BuiltIn::Group Begin
    Task Bravo::secondary::Tips On
      Estimated time: 9
      TaskScript:
        tips_on_loc = tips_on_loc - columns_samples
        task.Wellselection = [[ 1 , tips_on_loc ]]

        print("Pressing tips on at " + task.Wellselection)
      Location, plate: tips11
      Location, location: 2
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
        Wells: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackNew(columns_samples)
    Task Bravo::secondary::Aspirate
      Estimated time: 12
      Location, plate: AMPure XP Cleanup 1
      Location, location: 7
      Volume: =elute_vol+1 [29]
      Pre-aspirate volume: 1
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 0.1
      Dynamic tip extension: 0.01
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task BuiltIn::Reserve Location
      Location to use, plate: AMPure XP Cleanup 1
      Reservation time: 15
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    Task Bravo::secondary::Dispense
      Estimated time: 11
      Location, plate: AMPure XP Cleanup 1
      Volume: 1
      Liquid class: 96 disposable tip 10 - 50ul aq slow aspirate
      Distance from well bottom: 2
      Perform tip touch: 1
      Which sides to use for tip touch: West/East/South/North
      Tip touch retract distance: 7
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Dispense
      Estimated time: 32
      TaskScript: print("Transfering " + task.Volume + "ul to collection plate.")
      Location, plate: Sample Collection Plate
      Location, location: 6
      Empty tips: 1
      Volume: 30
      Blowout volume: 1
      Liquid class: dNTP RT Primer Mix
      Distance from well bottom: 5
      Perform tip touch: 1
      Tip touch retract distance: -3
      Well selection:
        PipetteHeadMode: Channels=0 ColumnCount=1 RowCount=8 SubsetConfig=3 SubsetType=1 TipType=0
        Wells: Column=0 Row=0
      PipetteHeadMode: Channels=0 ColumnCount=4 RowCount=8 SubsetConfig=3 SubsetType=3 TipType=0
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    Task Bravo::secondary::Tips Off
      Estimated time: 8
      TaskScript:
        tips_off_loc = tips_off_loc - columns_samples
        task.Wellselection = [[ 1 , tips_off_loc ]]
        print("Taking tips off at " + task.Wellselection)
      Location, plate: emptytips11
      Location, location: 8
      Mark tips as used: 0
      Well selection: Column=4 Row=0
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    Task BuiltIn::JavaScript
      TaskScript: trackUsed(columns_samples)
    Task BuiltIn::Group End
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Cleanup_Processes
  Process
    Plate name: cleanup process - 1
    Task Bravo::Move To Location
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 2
      Location: 1
    Task BuiltIn::JavaScript
      TaskScript:
        //overwrite ST_temp.txt with new variables
        //for use in the next protocol
        //need_tips
        //col
        //used_col
        //Nunc plate to use, etc.

        var update_temp_file = (need_tips + "\n" + col + "\n" + used_col + "\n" + Nunc_location + "\n" + head_mode + "\n" + columns_samples + "\n" + tips_on_loc + "\n" + tips_off_loc + "\n" + spri_case + "\n" + protocol_testing + "\n" + tipBox + "\n" + Collection_location + "\n" + Destination_location)

        file_overwrite("C:\\VWorks Workspace\\NGS Option B\\SpatialTranscriptomics_v.B1.0.2\\Scripts\\ST_temp.txt" , update_temp_file)
    Task BuiltIn::User Message
      Estimated time: 378
      TaskScript:
        if(spri_case == 2 || spri_case == 4){
        task.Body = "Runset complete. Plate with purified sample is at position 6. Click continue to turn off CPACs and finish protocol."
        }
        else{
        task.skip()
        }
      Pause process: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      TaskScript:
        //turning off cpacs at end of protocol
        if(spri_case == 2 || spri_case == 4){
        update_status("Protocol complete")
        }
        else{
        task.skip()
        }
      Location: 6
      Turn off temperature: 1
      Timeout: 1
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    Task Bravo::Set temperature - Position
      Device Device_Name=Bravo - 1 Location_Name=1
      Estimated time: 1
      TaskScript:
        if(spri_case == 2 || spri_case == 4){
        update_status("Protocol complete")
        }
        else{
        task.skip()
        }
      Location: 4
      Turn off temperature: 1
      Timeout: 1
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